 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "CheckCarrierPresence (All)\\CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "WSI\\SlackMessenger\\SlackMessenger_V2.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
#include "384WGS_PostShear_XPBiorad.res"
variable blnSimulationMode;
variable arrCarriersPresent[];
variable intSeqCap;
variable devHHS1;
variable intNumberOfPlates;
variable blnPipettingStarted(0);
global device ML_STAR ("384WGS_PostShear_XPBiorad.lay", "ML_STAR", hslTrue);
dialog customDialog_1;
variable intTraceLevel;
variable _rtn;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOAD_INSTRUCTIONS::_InitLibrary();
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    SLACKMESSENGER_V2::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    intTraceLevel = TRACE_LEVEL_RELEASE;
    TRACELEVEL::SetTraceLevel(intTraceLevel);
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> blnSimulationMode: "), blnSimulationMode);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, devHHS1);
    A_UserInput();
    if (blnSimulationMode == 0)
    {
      B_LoadInstructions();
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      _rtn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      if (_rtn == 2)
      {
        abort;
      }
    }
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    C_PipettingSteps(ML_STAR.mtp_TwinTecSourcePlates_1x2, ML_STAR.mtp_NuncPurificationPlates_1x2, ML_STAR.mtp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlates_1x2, ML_STAR.trp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlate_HHS, ML_STAR.res_Waste_x1);
    if (intNumberOfPlates >= 3)
    {
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      if (intNumberOfPlates == 3)
      {
        MECC::TraceComment(Translate("One plate requires 5 tip racks. 5 * 96 = 480"));
        ML_STAR.tips_300ulRocket.SetCount(480);
        ML_STAR.mtp_NuncPurificationPlates_Magnet.SetCount(96);
        ML_STAR.trp_NuncPurificationPlates_Magnet.SetCount(1);
      }
      SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Interaction Needed"));
      LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.tips_300ulRocket, Translate("Rocket 300"), 960, "Rocket Tip Counter 300 ul", 0);
      CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriersPresent);
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      C_PipettingSteps(ML_STAR.mtp_TwinTecSourcePlates_3x4, ML_STAR.mtp_NuncPurificationPlates_3x4, ML_STAR.mtp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlates_3x4, ML_STAR.trp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlate_HHS, ML_STAR.res_Waste_x2);
    }
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Interaction Needed"));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    D_384wConsolidation(ML_STAR.mtp_NuncPurificationPlates);
    HSLHamHeaterShaker::StopTempCtrl(devHHS1);
    HSLHamHeaterShaker::Terminate();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    SLACKMESSENGER_V2::_ExitLibrary();
  } }
