private function A_UserInput(  ) void ;
private function B_LoadInstructions(  ) void ;
private function C_PipettingSteps( sequence & seqSourcePipetting, sequence & seqPurificationPipetting_Home, sequence & seqPurificationPipetting_Magnet, sequence & seqPurificationTransport_Home, sequence & seqPurificationTransport_Magnet, sequence & seqPurificationTransport_HHS, sequence & seqWastePipetting ) void ;
private function D_384wConsolidation( sequence & seqSourcePipetting ) void ;
private function __Test(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("Turn off heater shaker"));
  HSLHamHeaterShaker::StopTempCtrl(devHHS1);
  HSLHamHeaterShaker::Terminate();
  SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Aborted"));
}

private function B_LoadInstructions(  ) void {
  private dialog dialogHandle_1;
  private variable intPlatesLoadSeq;
  private variable intTipNumberLoadSeq;
  private dialog customDialog_2;
  MECC::TraceComment(Translate("##############################################################\n                               LOAD INSTRUCTIONS: START\n##############################################################"));
  MECC::TraceComment(Translate("----- Create array containing carriers currently present on the deck -----"));
  arrCarriersPresent.SetSize(0);
  arrCarriersPresent.AddAsLast(Translate("MFX_CAR_TipBC_4DWP_NestRB_0001"));
  arrCarriersPresent.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0003"));
  arrCarriersPresent.AddAsLast(Translate("MFX_CAR_1DWP_4PCRAdaptor_0001"));
  arrCarriersPresent.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0002"));
  arrCarriersPresent.AddAsLast(Translate("TIP_CAR_480_A00_0001"));
  arrCarriersPresent.AddAsLast(Translate("TIP_CAR_480_A00_0002"));
  arrCarriersPresent.AddAsLast(Translate("MFX_CAR_5NTR4_0001"));
  MECC::TraceComment(Translate("----- Validate these carriers are present -----"));
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriersPresent);
  MECC::TraceComment(Translate("---------- Load Rocket Tips ----------"));
  if (intNumberOfPlates == 1)
  {
    MECC::TraceComment(Translate("One plate requires 5 tip racks. 5 * 96 = 480"));
    ML_STAR.tips_300ulRocket.SetCount(480);
  }
  LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.tips_300ulRocket, Translate("Rocket 300"), 960, "Rocket Tip Counter 300 ul", 0);
  MECC::TraceComment(Translate("---------- Load NTRs ----------\ncheck orientation"));
  intTipNumberLoadSeq = intNumberOfPlates * 96;
  ML_STAR.tips_50ulNTRs.SetCount(intTipNumberLoadSeq);
  LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.tips_50ulNTRs, Translate("NTR 50"), 384, Translate("96 50 ul tips in 384 rack"), 0);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.tips_50ulNTRs, Translate("Ensure the NTR 50 ul tips located at the flashing position are orientated on the deck with a tip in the A1 location"));
  MECC::TraceComment(Translate("---------- Load Waste Plates ----------"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Loading_waste_plates, Translate("Load Abgene waste plates on position 2 and 3"));
  MECC::TraceComment(Translate("---------- Load SPRI Select beads ----------"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_AmpureBeads, Translate("Load a 96 well Nunc plate containing 400ul of SPRI Select in each well on position 6"));
  MECC::TraceComment(Translate("---------- Load ethanol reservoir ----------"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Ethanol, Translate("Load a Nalgene reservoir containing 250 ml of 75% Ethanol on position 11"));
  MECC::TraceComment(Translate("---------- Load TE reservoir ----------"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_ElutionBuffer, Translate("Load a Nalgene reservoir containing at least 75 ml of TE on position 16"));
  MECC::TraceComment(Translate("---------- Load destination plate ----------"));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.mtp_EppendorfDestinationPlate, Translate("Load an empty 384 Greiner plate on position 7"));
  MECC::TraceComment(Translate("---------- Load purification plates ----------"));
  intPlatesLoadSeq = intNumberOfPlates * 96;
  ML_STAR.Loading_BindPlates96Nunc.SetCount(intPlatesLoadSeq);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Loading_BindPlates96Nunc, Translate("Load 4 empty Nunc plates on positions 17-20 starting with plate 1 at the back"));
  MECC::TraceComment(Translate("---------- Load source plates ----------"));
  intPlatesLoadSeq = intNumberOfPlates * 96;
  ML_STAR.Loading_PostShear96TwinTec.SetCount(intPlatesLoadSeq);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Loading_PostShear96TwinTec, Translate("Load 4 post shear plates (96w BioRad) on positions 12-15 starting with plate 1 at the back"));
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  dialogHandle_1.SetOutput(Translate("Deck is loaded. Check all carriers are pushed into place and close the door. Click 'OK' to start the protocol"));
  dialogHandle_1.ShowOutput(Translate("Start Protocol"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  MECC::TraceComment(Translate("----- Validate these carriers are present -----"));
  CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriersPresent);
  MECC::TraceComment(Translate("##############################################################\n                               LOAD INSTRUCTIONS: END\n##############################################################"));
}

private function C_PipettingSteps( sequence & seqSourcePipetting, sequence & seqPurificationPipetting_Home, sequence & seqPurificationPipetting_Magnet, sequence & seqPurificationTransport_Home, sequence & seqPurificationTransport_Magnet, sequence & seqPurificationTransport_HHS, sequence & seqWastePipetting ) void {
  private variable loopCounter1;
  private variable intTimerAmpureDNAMix;
  private variable intTempHHS;
  private variable intVolShearedDNA;
  private variable intVolAmpureBeads;
  private timer tmrBeadIncubation1;
  private timer tmrBeadIncubation2;
  private variable loopCounter2;
  private variable blnGripEject;
  private variable loopCounter3;
  private variable intTimerMagnetPulldown;
  private timer tmrBeadPulldown1;
  private timer tmrBeadPulldown2;
  private variable intVolSupernatant;
  private variable intVolEthanol;
  private variable intVolEthanolToWaste;
  private variable loopCounter4;
  private variable intTimerDrying;
  private variable intVolShearedDNAMix;
  private variable intTimerShake;
  private variable intVolElution;
  private timer tmrDrying;
  MECC::TraceComment(Translate("##############################################################\n                                    PIPETTING STEPS: START\n##############################################################"));
  MECC::TraceComment(Translate("********** Variable Creation **********"));
  blnGripEject = 0;
  MECC::TraceComment(Translate("----- Volumes -----"));
  intVolAmpureBeads = 80;
  intVolShearedDNA = 110;
  intVolShearedDNAMix = 150;
  intVolSupernatant = 190;
  intVolEthanol = 180;
  intVolEthanolToWaste = intVolEthanol + 20;
  intVolElution = 22;
  MECC::TraceComment(Translate("----- Timers -----"));
  intTimerAmpureDNAMix = 180;
  intTimerMagnetPulldown = 180;
  intTimerDrying = 240;
  intTimerShake = 10;
  if (blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("----- Simulation timers -----"));
    intTimerAmpureDNAMix = 2;
    intTimerMagnetPulldown = 2;
    intTimerDrying = 2;
    intTimerShake = 2;
  }
  MECC::TraceComment(Translate("----- Temperatures -----"));
  intTempHHS = 45;
  MECC::TraceComment(Translate("Ramp heater shaker to 45 degrees"));
  HSLHamHeaterShaker::StartTempCtrl(devHHS1, intTempHHS, 0);
  MECC::TraceComment(Translate("*********************************************************\n        Step 1: Adding AMPure beads to DNA\n*********************************************************"));
  blnPipettingStarted = 1;
  {
    loopCounter1 = 0;
    while (
       (seqPurificationPipetting_Home.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqPurificationPipetting_Home, 1);
      loopCounter1 = loopCounter1 + 1;
      MECC::TraceComment(Translate("----- Transfer AMPure Beads -----"));
      {
        	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
      }
      {
        	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
      }
      MECC::TraceComment(Translate("----- Transfer Sheared DNA -----"));
      {
        	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
      }
      {
        	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
      }
      MECC::TraceComment(Translate("----- Incubation Timer -----"));
      if (loopCounter1 == 1)
      {
        if( 0 == tmrBeadIncubation1.SetTimer(intTimerAmpureDNAMix) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter1 == 2)
        {
          if( 0 == tmrBeadIncubation2.SetTimer(intTimerAmpureDNAMix) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if (
         (seqPurificationPipetting_Home.GetCurrentPosition() > 0 && seqPurificationPipetting_Home.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqPurificationPipetting_Home.SetMax(seqPurificationPipetting_Home.GetTotal());
    seqPurificationPipetting_Home.SetCurrentPosition(1);
  }
  seqSourcePipetting.SetCurrentPosition(1);
  seqPurificationPipetting_Home.SetCurrentPosition(1);
  MECC::TraceComment(Translate("*********************************************************\n        Step 2: Pull beads down on magnet\n*********************************************************"));
  {
    loopCounter2 = 0;
    while (
       (seqPurificationTransport_Magnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqPurificationTransport_Magnet, 1);
      loopCounter2 = loopCounter2 + 1;
      MECC::TraceComment(Translate("----- Wait for timer -----"));
      if (loopCounter2 == 1)
      {
        if( 0 == tmrBeadIncubation1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          if( 0 == tmrBeadIncubation2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      MECC::TraceComment(Translate("----- Move onto magnet -----"));
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment(Translate("----- Pulldown timer -----"));
      if (loopCounter2 == 1)
      {
        if( 0 == tmrBeadPulldown1.SetTimer(intTimerMagnetPulldown) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          if( 0 == tmrBeadPulldown2.SetTimer(intTimerMagnetPulldown) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if (
         (seqPurificationTransport_Magnet.GetCurrentPosition() > 0 && seqPurificationTransport_Magnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqPurificationTransport_Magnet.SetMax(seqPurificationTransport_Magnet.GetTotal());
    seqPurificationTransport_Magnet.SetCurrentPosition(1);
  }
  seqPurificationTransport_Home.SetCurrentPosition(1);
  seqPurificationTransport_Magnet.SetCurrentPosition(1);
  MECC::TraceComment(Translate("*********************************************************\n                              Step 3 - 6\n*********************************************************"));
  {
    loopCounter3 = 0;
    while (
       (seqPurificationPipetting_Magnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqPurificationPipetting_Magnet, 1);
      loopCounter3 = loopCounter3 + 1;
      MECC::TraceComment(Translate("----- Wait for timer -----"));
      if (loopCounter3 == 1)
      {
        if( 0 == tmrBeadPulldown1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          if( 0 == tmrBeadPulldown2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      MECC::TraceComment(Translate("*********************************************************\n               Step 3: Remove Supernatant\n*********************************************************"));
      {
        	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
      }
      {
        	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
      }
      MECC::TraceComment(Translate("*********************************************************\n               Step 4: Ethanol wash\n*********************************************************"));
      {
        for(loopCounter4 = 0; loopCounter4 < 2;)
        {
          loopCounter4 = loopCounter4 + 1;
          MECC::TraceComment(Translate("----- Add Ethanol -----"));
          {
            	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
          }
          {
            	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
          }
          MECC::TraceComment(Translate("----- Remove Ethanol -----"));
          {
            	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
          }
          {
            	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
          }
          ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
        }
      }
      MECC::TraceComment(Translate("*********************************************************\n               Step 5: Ethanol Drying\n*********************************************************"));
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment(Translate("----- Drying timer -----"));
      if( 0 == tmrDrying.SetTimer(intTimerDrying) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrDrying.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("----- Move onto Home -----"));
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment(Translate("*********************************************************\n               Step 6: Add elution buffer\n*********************************************************"));
      {
        	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
      }
      {
        	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
      }
      MECC::TraceComment(Translate("----- Incubate on Shaker -----"));
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      HSLHamHeaterShaker::StartShakerTimed(devHHS1, 500, intTimerShake);
      HSLHamHeaterShaker::WaitForShaker(devHHS1);
      blnGripEject = 1;
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      blnGripEject = 0;
      MECC::TraceComment(Translate("----- Sequence Increments -----"));
      SeqIncrement(seqPurificationPipetting_Home, 96);
      SeqIncrement(seqPurificationPipetting_Magnet, 96);
      SeqIncrement(seqPurificationTransport_Home, 1);
      SeqIncrement(seqPurificationTransport_Magnet, 1);
      if (
         (seqPurificationPipetting_Magnet.GetCurrentPosition() > 0 && seqPurificationPipetting_Magnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqPurificationPipetting_Magnet.SetMax(seqPurificationPipetting_Magnet.GetTotal());
    seqPurificationPipetting_Magnet.SetCurrentPosition(1);
  }
  seqPurificationPipetting_Home.SetCurrentPosition(1);
  seqPurificationPipetting_Magnet.SetCurrentPosition(1);
  seqPurificationTransport_Home.SetCurrentPosition(1);
  seqPurificationTransport_Magnet.SetCurrentPosition(1);
  MECC::TraceComment(Translate("##############################################################\n                                    PIPETTING STEPS: END\n##############################################################"));
}

private function D_384wConsolidation( sequence & seqSourcePipetting ) void {
  private variable intVolMix;
  private variable intVolTransfer;
  private variable loopCounter1;
  MECC::TraceComment(Translate("##############################################################\n                                  384w CONSOLIDATION: START\n##############################################################"));
  MECC::TraceComment(Translate("********** Variable Creation **********"));
  MECC::TraceComment(Translate("----- Volumes -----"));
  intVolTransfer = 24;
  intVolMix = 15;
  MECC::TraceComment(Translate("*********************************************************\n        Step 7: Sample Consolidation\n*********************************************************"));
  {
    loopCounter1 = 0;
    while (
       (seqSourcePipetting.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqSourcePipetting, 1);
      loopCounter1 = loopCounter1 + 1;
      {
        	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
      }
      {
        	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
      }
      if (
         (seqSourcePipetting.GetCurrentPosition() > 0 && seqSourcePipetting.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqSourcePipetting.SetMax(seqSourcePipetting.GetTotal());
    seqSourcePipetting.SetCurrentPosition(1);
  }
  MECC::TraceComment(Translate("##############################################################\n                                  384w CONSOLIDATION: END\n##############################################################"));
}

private function A_UserInput(  ) void {
  private dialog customDialog_3;
  private variable rtnValue;
  MECC::TraceComment(Translate("##############################################################\n                                      USER INPUT: START\n##############################################################"));
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  intNumberOfPlates = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
  TrcTrace(Translate("///// intNumberOfPlates = "), intNumberOfPlates);
  intSeqCap = 96;
  if (intNumberOfPlates == 1)
  {
    ML_STAR.mtp_TwinTecSourcePlates_1x2.SetCount(intSeqCap);
    ML_STAR.mtp_NuncPurificationPlates_1x2.SetCount(intSeqCap);
    ML_STAR.mtp_NuncPurificationPlates_Magnet.SetCount(intSeqCap);
    ML_STAR.trp_NuncPurificationPlates_1x2.SetCount(1);
    ML_STAR.trp_NuncPurificationPlates_Magnet.SetCount(1);
  }
  else
  {
    if (intNumberOfPlates == 3)
    {
      ML_STAR.mtp_TwinTecSourcePlates_3x4.SetCount(intSeqCap);
      ML_STAR.mtp_NuncPurificationPlates_3x4.SetCount(intSeqCap);
      ML_STAR.trp_NuncPurificationPlates_3x4.SetCount(1);
    }
    else
    {
    }
  }
  intSeqCap = intNumberOfPlates * 96;
  ML_STAR.mtp_NuncPurificationPlates.SetCount(intSeqCap);
  SLACKMESSENGER_V2::SelectMessagingPlatform(1);
  MECC::TraceComment(Translate("##############################################################\n                                          USER INPUT: END\n##############################################################"));
}

private function __Test(  ) void {
  private variable intVolShearedDNAMix;
  private variable loopCounter1;
  private variable intVolShearedDNA;
  private timer timer1;
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
  if( 0 == timer1.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ML_STAR._1D4493E8_CF9A_4c4a_B0D1_9ADF863428E0("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"); // Head384Move
  if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
  if(0){
    TrcTrace(Translate("///// blnSimulationMode = "), blnSimulationMode);
    ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
    intVolShearedDNA = 110;
    intVolShearedDNAMix = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < 3;)
      {
        loopCounter1 = loopCounter1 + 1;
        TrcTrace(Translate("///// loopCounter1 = "), loopCounter1);
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        SeqResetSequenceIndexes(ML_STAR.mtp_TwinTecSourcePlates_1x2);
        SeqResetSequenceIndexes(ML_STAR.mtp_TwinTecSourcePlates_3x4);
      }
    }
    ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
  }
}
