 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "CheckCarrierPresence (All)\\CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "384WGS_PostShear_XPBiorad_v1.0.res"
 namespace _Method { #include "WSI\\SlackMessenger\\SlackMessenger_V2.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
variable blnSimulationMode;
dialog customDialog_1;
variable arrCarriersPresent[];
global device ML_STAR ("384WGS_PostShear_XPBiorad_v1.0.lay", "ML_STAR", hslTrue);
variable intSeqCap;
variable devHHS1;
variable intNumberOfPlates;
variable blnUserInput;
variable blnPipettingStarted(0);
dialog customDialog_2;
variable _strStartCheck;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOAD_INSTRUCTIONS::_InitLibrary();
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    SLACKMESSENGER_V2::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, devHHS1);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnUserInput = 1;
    if (blnUserInput == 1)
    {
      A_UserInput();
    }
    else
    {
      intNumberOfPlates = 4;
    }
    B_LoadInstructions();
    C_PipettingSteps(ML_STAR.mtp_TwinTecSourcePlates_1x2, ML_STAR.mtp_NuncPurificationPlates_1x2, ML_STAR.mtp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlates_1x2, ML_STAR.trp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlate_HHS, ML_STAR.res_Waste_x1);
    if (intNumberOfPlates > 2)
    {
      SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Tip Reload"));
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      if (intNumberOfPlates == 3)
      {
        MECC::TraceComment(Translate("One plate requires 5 tip racks. 5 * 96 = 480"));
        ML_STAR.tips_300ulRocket.SetCount(480);
        ML_STAR.mtp_NuncPurificationPlates_Magnet.SetCount(96);
        ML_STAR.trp_NuncPurificationPlates_Magnet.SetCount(1);
      }
      LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.tips_300ulRocket, Translate("Rocket 300"), 960, "Rocket Tip Counter 300 ul", 0);
      CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, arrCarriersPresent);
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      C_PipettingSteps(ML_STAR.mtp_TwinTecSourcePlates_3x4, ML_STAR.mtp_NuncPurificationPlates_3x4, ML_STAR.mtp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlates_3x4, ML_STAR.trp_NuncPurificationPlates_Magnet, ML_STAR.trp_NuncPurificationPlate_HHS, ML_STAR.res_Waste_x2);
    }
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Method almost complete"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    D_384wConsolidation(ML_STAR.mtp_NuncPurificationPlates);
    MECC::TraceComment(Translate("Turn off heater shaker"));
    HSLHamHeaterShaker::StopTempCtrl(devHHS1);
    HSLHamHeaterShaker::Terminate();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    SLACKMESSENGER_V2::_ExitLibrary();
  } }
